//function filters all files with certain extension
//example: myFileList = getFileType(myFileList, ".tif", true);
function getFileType(fileListFunction, fileExtension, displayList) {
returnedFileList = newArray(0);     //this list stores all files found to have the extension and is returned at the end of the function
if(lengthOf(fileExtension) > 0) {
	for (i = 0; i < fileListFunction.length; i++) {
		if (endsWith(fileListFunction[i],fileExtension)) returnedFileList = Array.concat(returnedFileList,fileListFunction[i]);
		}
	print(returnedFileList.length + " file(s) found with extension " + fileExtension + ".");
	if (displayList) {Array.show("All files - filtered for " + fileExtension, returnedFileList);} 
	} else {
	returnedFileList = fileListFunction;	
	}
return returnedFileList;
}