//function filters a file list for a certain strings
//example: myFileList = getFilteredFileList(myFileList, false, true);
//if filterOnInputList = true, then additional filtering is possible (e.g. file names containing "H08" and "D04" => H08 and D04 in list)
//if filterOnInputList = false, then subsequent filtering is possible (e.g. file names containing "controls" and "positive" => positive controls, but not negative controls in list!)
//this function needs global variables (see function setDialogImageFileFilter)
//var filterStrings = newArray("","","");                                      //pre-definition of strings to filter
//var availableFilterTerms = newArray("no filtering", "include", "exclude");   //dont change this
//var filterTerms = newArray("no filtering", "no filtering", "no filtering");
function getFilteredFileList(fileListFunction, filterOnInputList, displayList) {
skippedFilter = 0;	
for (i = 0; i < filterStrings.length; i++) {
	if (filterTerms[i] != availableFilterTerms[0]) {
		returnedFileList = newArray(0);     //this list stores all files found to have the extension and is returned at the end of the function
		for (j = 0; j < fileListFunction.length; j++) {
			if (filterTerms[i] == "include" && indexOf(fileListFunction[j],filterStrings[i]) != -1) returnedFileList = Array.concat(returnedFileList,fileListFunction[j]);
			if (filterTerms[i] == "exclude" && indexOf(fileListFunction[j],filterStrings[i]) <= 0) returnedFileList = Array.concat(returnedFileList,fileListFunction[j]);
			}
		print(returnedFileList.length + " file(s) found after filter: " + filterTerms[i] + " text " + filterStrings[i] + "."); 
		if (displayList) {Array.show("List of files - after filtering for " + filterStrings[i], returnedFileList);}
		//see description above! default: filterOnInputList = false
		if(!filterOnInputList) fileListFunction = returnedFileList; 
		} else skippedFilter++;
	} 
if (skippedFilter == filterStrings.length) returnedFileList = fileListFunction;	//if no filter condition is selected
return returnedFileList;
}