//function filters a list for a certain string (filter)
//example: myList = getFilteredList(myList, "myText", true);
function getFilteredList(inputList, filterStringFunction, displayList) {
skippedFilter = 0;	
returnedList = newArray(0); //this list stores all items of the input list that were found to contain the filter string and is returned at the end of the function
for (i = 0; i < inputList.length; i++) {
	if (indexOf(inputList[i],filterStringFunction) != -1) returnedList = Array.concat(returnedList,inputList[i]);
	}
print(returnedList.length + " file(s) found after filtering: " + filterStringFunction); 
if (displayList) {Array.show("List after filtering for " + filterStringFunction, returnedFileList);}
return returnedList;
}