//ImageFileFilter-Open-List-of-Images
macroName = "ImageFileFilter-Open-List-of-Images";
macroShortDescription = "This macro open all filtered files in a selected folder.";
macroDescription = "This macro reads single .tif images." +
	"<br>The chosen folder will be searched for images including subfolders" +
	"<br>and the list of files to be processed can be filters for text or tags in the file path.";
macroRelease = "first release 28-11-2014 by Martin Stöter (stoeter(at)mpi-cbg.de)";
macroHelpURL = "https://github.com/stoeter/Fiji-Tools-for-HCS/wiki/Macro-" + macroName;
macroHtml = "<html>" 
	+"<font color=red>" + macroName + "\n" + macroRelease + "</font> <br> <br>"
	+"<font color=black>" + macroDescription + "</font> <br> <br>"
	+"<font color=black>Check for more help on this web page:</font> <br>"
	+"<font color=blue>" + macroHelpURL + "</font> <br>"
	+"<font color=black>...get this URL from Log window!</font>"
    +"</font>";
    	
//print macro name and current time to Log window
getDateAndTime(year, month, dayOfWeek, dayOfMonth, hour, minute, second, msec); month++;
print("\\Clear");
print(macroName,"\nStart:",year+"-"+month+"	-"+dayOfMonth+", h"+hour+"-m"+minute+"-s"+second);
print(macroHelpURL);

//start macro
Dialog.create("Fiji macro: " + macroName);
Dialog.addMessage("Fiji macro: " + macroName + " (Fiji-Tools-for-HCS by TDS@MPI-CBG)\n \n" + macroShortDescription + "\n \nClick 'OK' to go on, 'Cancel' to quit or 'Help' for online description.");     
Dialog.addHelp(macroHtml);
Dialog.show;

//choose folders
var inputPath = "";
var outputPath = "not available"; 
inputPath = getDirectory("Choose image folder... ");
//outputPath = getDirectory("Choose result image folder... or create a folder");
printPaths = "inputPath = \"" + inputPath + "\";\noutputPath = \"" + outputPath + "\";";
print(printPaths);

//set log file number
tempLogFileNumber = 1;
if(outputPath != "not available") while (File.exists(outputPath + "Log_temp_" + tempLogFileNumber +".txt")) tempLogFileNumber ++; //find last tempLog file to prevent overwriting of log 

//initialize => default settings
run("Set Measurements...", "area mean standard min centroid center shape integrated median display redirect=None decimal=3");
run("Input/Output...", "jpeg=95 gif=-1 file=.txt copy_column copy_row save_column save_row");	
run("Close All");
run("Color Balance...");

////////////////////////////////        M A C R O   C O D E         /////////////////////////////// 
//set array variables
batchMode = false;
var fileExtension = ".tif";                                                  //pre-definition of extension
var filterStrings = newArray("","","");                                      //pre-definition of strings to filter
var availableFilterTerms = newArray("no filtering", "include", "exclude");   //dont change this
var filterTerms = newArray("no filtering", "no filtering", "no filtering");  //pre-definition of filter types 
var displayFileList = false;                                                 //shall array window be shown? 

getDialogImageFileFilter();
//get file list ALL
fileList = getFileListSubfolder(inputPath);  //read all files in subfolders
fileList = getFileType(fileList);			 //filter for extension
fileList = getFilteredFileList(fileList);    //filter for strings

waitForUser("Do you really want to open " + fileList.length + " files?" + "\n\n" + "Otherwise press 'ESC' and check image list and filter text!");

setBatchMode(batchMode);
//go through all file
for (currentFile = 0; currentFile < fileList.length; currentFile++) {
	if (endsWith(fileList[currentFile],".tif")) {   //check if it is right file and handle error on open()
		IJ.redirectErrorMessages();
		run("TIFF Virtual Stack...", "open=[" + fileList[currentFile] + "]");
		if (currentFile == 0) fileName = getTitle();
		showProgress(currentFile / fileList.length);
	       showStatus("processing" + fileList[currentFile]);
   	    if (nImages > 0) {			//if image is open    	
			print("opened (" + (currentFile + 1) + "/" + fileList.length + "):", fileList[currentFile]);  //to log window
//////////// START: add here some code to be run on each image   ///////////////////////

//run("Enhance Contrast", "saturated=0.35");
//saveAs("Tiff", outputPath + fileName);
//print("saved stack: " + fileName);

//////////// END: add here some code to be run on each image   /////////////////////////      	
       		} else { //if no images open
			print("file (" + (currentFile + 1) + "/" + fileList.length + "): ", fileList[currentFile], " could not be opened."); 	//if open() error
			}
		} else { //if file has different extensionn
		print("file (" + (currentFile + 1) + "/" + fileList.length + "): ", fileList[currentFile], " was skipped."); 	//if not .tif
		}		
	}
				
//print current time to Log window and save log
getDateAndTime(year, month, dayOfWeek, dayOfMonth, hour, minute, second, msec); month++;
print("Macro executed successfully.\nEnd:",year+"-"+month+"-"+dayOfMonth+", h"+hour+"-m"+minute+"-s"+second);
selectWindow("Log");
if(outputPath != "not available") {
	saveAs("Text", outputPath + "Log_"+year+"-"+month+"-"+dayOfMonth+", h"+hour+"-m"+minute+"-s"+second+".txt");
	if (File.exists(outputPath + "Log_temp_" + tempLogFileNumber +".txt")) File.delete(outputPath + "Log_temp_" + tempLogFileNumber + ".txt");  //delete current tempLog file 	
	}
/////////////////////////////////////////////////////////////////////////////////////////////
////////                             F U N C T I O N S                          /////////////
/////////////////////////////////////////////////////////////////////////////////////////////
//function open dialog to set image file list filter
function setDialogImageFileFilter() {
Dialog.create("Image file filter...");  //enable use inveractivity
Dialog.addMessage("Define the files to be processed:");
Dialog.addString("Files should have this extension:", fileExtension);	//add extension
Dialog.addMessage("Define filter for files:");
for (i = 0; i < filterStrings.length; i++) {
	Dialog.addString((i + 1) + ") Filter this text from file list: ", filterStrings[i]);	
	Dialog.addChoice((i + 1) + ") Files with text are included/excluded?", availableFilterTerms, filterTerms[i]);	
	}
Dialog.addCheckbox("Check file lists?", displayFileList);	//if check file lists will be displayed
Dialog.show();
fileExtension = Dialog.getString();
for (i = 0; i < filterStrings.length; i++) {
	filterStrings[i] = Dialog.getString();	
	filterTerms[i] = Dialog.getChoice();	
	}
displayFileList = Dialog.getCheckbox();
}

//function get all files from folders and subfolders
function getFileListSubfolder(inputPathFunction) {
fileList = getFileList(inputPathFunction);  //read file list
Array.sort(fileList);
returnedFileList = newArray(0);     //this list stores all found files and is returned at the end of the function
for (i=0; i < fileList.length; i++) {
	if ((File.separator == "\\") && (endsWith(fileList[i], "/"))) fileList[i] = replace(fileList[i],"/",File.separator); //fix windows/Fiji File.separator bug
	if (endsWith(fileList[i], File.separator)) {   //if it is a folder
		returnedFileListTemp = newArray(0);
		returnedFileListTemp = getFileListSubfolder(inputPathFunction + fileList[i]);
		returnedFileList = Array.concat(returnedFileList, returnedFileListTemp);
		} else {  									//if it is a file
		returnedFileList = Array.concat(returnedFileList, inputPathFunction + fileList[i]);
		//print(i, inputPath + fileList[i]);
		}
	}
if(inputPathFunction == inputPath) { //if local variable is equal to global path variable = if path is folder and NOT subfolder
	print(returnedFileList.length + " files found in selected folder and subfolders."); 	
	if (displayFileList) {Array.show("All files - all",returnedFileList);} 	
}
return returnedFileList;
}

//function finds all files with certain extension
function getFileType(fileListFunction) {
returnedFileList = newArray(0);     //this list stores all files found to have the extension and is returned at the end of the function
if(lengthOf(fileExtension) > 0) {
	for (i = 0; i < fileListFunction.length; i++) {
		if (endsWith(fileListFunction[i],fileExtension)) returnedFileList = Array.concat(returnedFileList,fileListFunction[i]);
		}
	print(returnedFileList.length + " files found with extension " + fileExtension + ".");
	if (displayFileList) {Array.show("All files - filtered for " + fileExtension, returnedFileList);} 
	} else {
	returnedFileList = fileListFunction;	
	}
return returnedFileList;
}

//function filter a file list for a certain string
function getFilteredFileList(fileListFunction) {
skippedFilter = 0;	
for (i = 0; i < filterStrings.length; i++) {
	if (filterTerms[i] != availableFilterTerms[0]) {
		returnedFileList = newArray(0);     //this list stores all files found to have the extension and is returned at the end of the function
		for (j = 0; j < fileList.length; j++) {
			if (filterTerms[i] == "include" && indexOf(fileList[j],filterStrings[i]) != -1) returnedFileList = Array.concat(returnedFileList,fileListFunction[j]);
			if (filterTerms[i] == "exclude" && indexOf(fileList[j],filterStrings[i]) <= 0) returnedFileList = Array.concat(returnedFileList,fileListFunction[j]);
			}
		print(returnedFileList.length + " files found after filter: " + filterTerms[i] + " text " + filterStrings[i] + "."); 
		if (displayFileList) {Array.show("List of files - after filtering for " + filterStrings[i], returnedFileList);}
		fileListFunction = returnedFileList;
		} else skippedFilter++;
	} 
if (skippedFilter == filterStrings.length) returnedFileList = fileListFunction;	//if no filter condition is selected
return returnedFileList;
}

////////////////////////////////////////   E N D    O F    M A C R O   ////////////////////////////